PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s' % (expInfo['participant'])
  Experiment info = {'participant': 'f"sub_{randint(0, 9999):04.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1728, 1117]
  color = -1.0000, -1.0000, -1.0000
  expName = diamond_search
  keyboardBackend = PsychToolbox
  logging level = warning
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Routines
  Routine fixation
    PolygonComponent fixcross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      units = deg
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  Routine cue
    CodeComponent cue_init
      Code Type = Py
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      Begin Routine:
        # construct pointer
        ip = randchoice([pos1, pos3, pos4, pos5, pos6]) # except salient distractor
        # change line start, end
        line.start = [0,0]
        line.end = [CoordsX[ip]/3.0, CoordsY[ip]/3.0]
        if cue_validity == 1:
            # point to distractor location
            line.end = [CoordsX[pos2]/3.0, CoordsY[pos2]/3.0]
    PolygonComponent fix_disk
      fillColor = 0.7000, 0.7000, 0.7000
      lineColor = -1,-1,-1
      saveStartStop = False
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent fixation_cross
      contrast [set every repeat] = 1
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent fix_disk2
      fillColor = 0.7,0.7,0.7
      lineColor = 0.7,0.7,0.7
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent line
      fillColor = white
      lineWidth = 5
      saveStartStop = False
      shape = line
      size = (2, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine search
    CodeComponent search_code
      Code Type = Py
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      Begin Experiment:
        # genearte trial sequences,
        import pandas as pd

        n_trials = 120
        block_trials = 30
        num_block = n_trials//block_trials

        # there are 6 possible locations for the target and distractors, [0, 1,3,4] for target, [2,5] for distractors
        # create an array of 120 rows with possible target locations
        target_pos = np.array([randchoice([0,1,3,4], 1, replace=False) for i in range(n_trials)])
        # create an array of 120 rows with possible distractor locations
        distractor_pos = np.array([randchoice([2,5], 1, replace=False) for i in range(n_trials)])
        # create any array of 120 rows, 5 columns with possible shapes for distractors, 3, 5, 6, 0 (triangle, pentagon, hexagon, circle)
        distractor_shapes = np.array([randchoice([3,5,6,0], 5, replace=True) for i in range(n_trials)])
        # create an array of 120 row with possible distractor presence (0,1)
        singleton = np.array([randchoice([0,1], 1, replace=True) for i in range(n_trials)])
        # create an array of 120 rows with possible target colors (0,1)
        target_color = np.array([randchoice([0,1], 1, replace=True) for i in range(n_trials)])
        # create correct answer 2D array of 120 rows, one column based on target_pos: > 2 is 0, < 2 is 1 (left, right) with one column
        correct_answer = np.array([0 if i > 2 else 1 for i in target_pos])
        # convert correct_answer to 2D array
        correct_answer = correct_answer.reshape(n_trials, 1)

        # concatenate all arrays into one array
        sequences = np.concatenate((target_pos, distractor_pos, distractor_shapes, singleton, target_color, correct_answer), axis=1)
        # convert sequences to pandas dataframe
        sequences = pd.DataFrame(sequences, columns=['target_pos', 'distractor_pos', 'distractor_shape1', 'distractor_shape2',
                                                     'distractor_shape3', 'distractor_shape4', 'distractor_shape5',
                                                     'singleton', 'target_color', 'correct_answer'])
        # change all columns to int
        sequences = sequences.astype(int)
        #save trials to csv file in subfolder sequences
        seq_file = _thisDir + os.sep + u'data/%s_seq.csv' % (expInfo['participant'])
        sequences.to_csv(seq_file, index=False)

        circle_rad = 6 # radius of circle (degrees)  were centered from the fixation
        lw = 1 # item border line width (pixels)
        dw = 3 # diamond width (degrees)

        col_Teal = [-0.7255,0.8902,0.8353]
        col_orange = [1.000, 0.2491, -1.0000]
        col_black = [-1, -1, -1]

        # create a 6 circular coordinates from 0 to 300 degrees with radius of circle_rad
        CoordsX = [circle_rad*cos(t*pi/180) for t in range(-30, 271, 60)]
        CoordsY = [circle_rad*sin(t*pi/180) for t in range(-30, 271, 60)]
      Begin Routine:
        # draw six shapes in the six circular coordinates
        if target_color == 0:
            tar_col = col_Teal
            dis_col = col_orange
        else:
            tar_col = col_orange
            dis_col = col_Teal

        if correct_answer == 0:
            corr_ans = 'left'
        else:
            corr_ans = 'right'

        items = [None]*6

        dis_count = 0
        for i in range(6):
            # five distractor shapes
            shape = locals()[f'distractor_shape{dis_count+1}']

            if i == target_pos: #Target - Diamond
                items[i]= visual.Polygon(win = win, edges = 4, size = dw,lineWidth = lw)
                items[i].fillColor = tar_col
            else: # distractor
                if shape == 0:
                    items[i]= visual.Circle(win=win,radius= dw/2,edges = 128, lineWidth=lw)
                else:
                    items[i]= visual.Polygon(win = win, edges = shape, size = dw,lineWidth = lw)
                if shape == 3: #triangle, increase the area a bit
                    items[i].size = dw * 1.02
                if singleton == 1 and i == distractor_pos: # distractor singleton
                    items[i].fillColor = dis_col
                else:
                    items[i].fillColor = tar_col
                # increase distractor count
                dis_count = dis_count + 1
            items[i].name='position_' + str(i+1)
            items[i].setPos((CoordsX[i], CoordsY[i]))
            items[i].setAutoDraw(True)
      End Routine:
        for i in range(6):
            items[i].setAutoDraw(False)
        win.flip()

        if search_response.corr == 1:
            corr_trials = corr_trials +1
    KeyboardComponent search_response
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine block_break
    CodeComponent break_code
      Code Type = Py
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      Begin Experiment:
        corr_trials = 0
        block_break = False
        key_dur = 1.0 + random()/2.0
      Begin Routine:
        if ((trials.thisN+1) % block_trials == 0):
            block_break = True
            key_dur = 1800.0 # maximum 30 minutes
            this_block=int((trials.thisN+1)/block_trials)
            corr_rate = round(corr_trials/block_trials*100)
            btext = 'Block No. ' + str(this_block) + ' was finished.\n\n'
            btext = btext + 'There are ' + str(num_block-this_block) + ' left. \n\n'
            btext = btext + 'In the previous block, your correct rate was: \n\n' + str(corr_rate) + '%\n\n'
            btext = btext + 'Please keep your correct rate as high as possible. \n'
            btext = btext + 'If you are ready, press the SPACEBAR to continue ...'
            block_info.text = btext
            corr_trials=0
        else:
            block_info.text = ''
      End Routine:
        block_break = False
        key_dur = 1.0 + random()/2.0
    TextComponent block_info
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $key_dur
      text = Take a rest
      wrapWidth = 40
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    KeyboardComponent key_block
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $key_dur
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  Routine finish
    TextComponent end
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text:
        The experiment is finished.

        Thank you for your participation!
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine et_record_start
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine et_record_stop
    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  EyetrackerCalibrationRoutine calibration
    borderColor = white
    borderWidth = 1
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = 0.6549, 0.6549, 0.6549
    innerBorderColor = white
    innerBorderWidth = 1
    innerFillColor = green
    innerRadius = 0.14
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.35
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine Instruction_display
    ImageComponent image_instr1
      image = display.png
      saveStartStop = False
      size = (10, 9.4)
      startVal [time (s)] = 0.0
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    TextComponent text_intro
      letterHeight = 1
      pos = (0, 6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 40
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      text:
        You will see a visual search display comprising six shapes on each trial. Sometimes, one shape may be a different color that you should ignore.

        Your task is to find if the diamond shape is on the right or left side.
    KeyboardComponent space_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_cont2
      letterHeight = 1
      pos = (0, -6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue ...
      units = deg
      wrapWidth = 40
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Flow
  Routine Instruction_display
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"data/"+expInfo['participant']+"_seq.csv"
    loopType = sequential
    nReps = 1
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    Routine fixation
    Routine search
    Routine block_break
  LoopTerminator trials
  Routine finish
