PsychoPy2experiment version="2023.1.0"
Settings
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant'], expInfo['session'])
  Experiment info = {'participant': 'f"sub_{randint(0, 9999):04.0f}"', 'session': '001', 'distractor_prevalence': '0.9', 'validity': '1.0'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = stress
  eyetracker = SR Research Ltd
  keyboardBackend = PsychToolbox
  logging level = warning
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Routines
  Routine fixation
    PolygonComponent fixcross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.5
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  Routine cue
    CodeComponent cue_init
      Code Type = Py
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      Begin Experiment:
        # generate trial sequences,
        # first 6 cols: item positions (Target, Distractor, otherDist1-4)
        # 6-11: shapes (3-6 polygon, 0 - circle)
        # 12: singleton or not
        # 13: target color
        # 14: target orientation
        # 15: cue validity
        import pandas as pd

        n_trials = 400
        block_trials= 40
        num_block=n_trials//block_trials
        # Create item locations, each row contains random shuffled numbers from 0 to 5 (first Target, second distractor)
        itempos = np.array([randchoice(6, 6, replace=False) for i in range(n_trials)])
        # create distractor shapes with 5 columns, each row contains random samples from [3,5,6,0,3,5,6,0]
        # 3,5,6,0(triangle, pentagon, hexagon, circle)
        item_shapes = np.array([randchoice([3,5,6,0,3,5,6,0], 5, replace=False) for i in range(n_trials)])
        # add a column of 4s to the first of the matrix
        item_shapes = np.insert(item_shapes, 0, 4, axis=1)

        # create target color, and target orientation [0,1]
        # initialize a matrix with half 0s and half 1s
        item_specs = np.zeros((n_trials, 2))
        # specify the second half of the matrix to be 1s
        item_specs[n_trials//2:, :] = 1
        # random shuffle rows, independent of each column
        for i in range(2):
            np.random.shuffle(item_specs[:, i])

        # singleton prevalence

        nsingleton = np.int32(float(expInfo['distractor_prevalence'])*n_trials)

        singleton_trials = np.concatenate((np.ones((nsingleton, 1)),
            np.zeros((n_trials-nsingleton, 1))), axis=0)
        np.random.shuffle(singleton_trials)
        # add cue validity as one column
        cue_valid_trials = np.int16(float(expInfo['validity'])*n_trials)
        item_valid = np.concatenate((np.ones((cue_valid_trials, 1)), np.zeros((n_trials-cue_valid_trials, 1))), axis=0)
        # random shuffle rows
        np.random.shuffle(item_valid)

        # combine itempos, item_shapes, and item_specs into trials
        sequences = np.concatenate((itempos, item_shapes, singleton_trials, item_specs, item_valid), axis=1)
        # # convert trials to pandas dataframe
        sequences = pd.DataFrame(sequences, columns=['pos1', 'pos2', 'pos3', 'pos4', 'pos5', 'pos6',
                                               'shape1', 'shape2', 'shape3', 'shape4', 'shape5', 'shape6',
                                               'singleton', 'target_color', 'target_orientation', 'cue_validity'])
        # change all columns to int
        sequences = sequences.astype(int)
        #save trials to csv file in subfolder sequences
        seq_file = _thisDir + os.sep + u'data/seq_%s.csv' % (expInfo['participant'])
        sequences.to_csv(seq_file, index=False)

        circle_rad = 6 # radius of circle (degrees)  were centered from the fixation
        lw = 1 # item border line width (pixels)
        dw = 3 # diamond width (degrees)
        #ill = 1.5 # internal line length (degrees)     1.5°
        #ilw = 0.3 # internal line width  (degrees)     0.3°
        #ilcol = 'black'
        #color
        col_Teal = [-0.7255,0.8902,0.8353]
        col_orange = [1.000, 0.2491, -1.0000]
        col_black = [-1, -1, -1]

        # create a 6 circular coordinates from 0 to 300 degrees with radius of circle_rad
        CoordsX = [circle_rad*cos(t*pi/180) for t in range(0, 301, 60)]
        CoordsY = [circle_rad*sin(t*pi/180) for t in range(0, 301, 60)]
      Begin Routine:
        # construct pointer
        ip = randchoice([pos1, pos3, pos4, pos5, pos6]) # except salient distractor
        # change line start, end
        line.start = [0,0]
        line.end = [CoordsX[ip]/3.0, CoordsY[ip]/3.0]
        if cue_validity == 1:
            # point to distractor location
            line.end = [CoordsX[pos2]/3.0, CoordsY[pos2]/3.0]

        ioServer.sendMessageEvent('Cue begin t%i' %(trials.thisN))
        eyetracker.sendMessage('Cue begin t%i' %(trials.thisN))
    PolygonComponent fix_disk
      fillColor = 0.7000, 0.7000, 0.7000
      lineColor = -1,-1,-1
      saveStartStop = False
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent fixation_cross
      contrast [set every repeat] = 1
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent fix_disk2
      fillColor = 0.7,0.7,0.7
      lineColor = 0.7,0.7,0.7
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent line
      fillColor = white
      lineWidth = 5
      saveStartStop = False
      shape = line
      size = (2, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine search
    CodeComponent search_code
      Code Type = Py
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      Begin Routine:
        # draw six shapes in the six circular coordinates
        if target_color == 0:
            tar_col = col_Teal
            dis_col = col_orange
        else:
            tar_col = col_orange
            dis_col = col_Teal

        if target_orientation == 0:
            corr_ans = 'left'
        else:
            corr_ans = 'up'

        items = [None]*6

        for i in range(6):
            # pos1, pos2, pos3, pos4, pos5, pos6 are the six positions of the six shapes, let pos = pos$i
            position = locals()[f'pos{i+1}']
            shape = locals()[f'shape{i+1}']

            if shape == 0:
                items[i]= visual.Circle(win=win,radius= dw/2,edges = 128, lineWidth=lw)
            else:
                items[i]= visual.Polygon(win = win, edges = 4, size = dw,lineWidth = lw)
                items[i].edges = shape
            if shape == 3: #triangle, increase the area a bit
                items[i].size = dw * 1.02
            if singleton == 1 and i == 1: # distractor singleton
                items[i].fillColor = dis_col
            else:
                items[i].fillColor = tar_col

            items[i].name=f'pos{i+1}'
            items[i].setPos((CoordsX[position], CoordsY[position]))
            items[i].setAutoDraw(True)

        # Draw lines inside the shapes
        lines = [None]*6
        for i in range(6):
            lines[i]=visual.Rect(win=win,size = [dw/3.0,0.1], lineWidth=lw, fillColor = 'black', lineColor = 'black')
            lines[i].setPos((CoordsX[i], CoordsY[i]))
            if i==pos1:
                if target_orientation == 0:
                    lines[i].ori = 0
                else:
                    lines[i].ori = 90
        #    elif i==pos2 and cue_validity == 1: # distractor
        #        if target_orientation == 0:
        #            lines[i].ori = 90
        #        else:
        #            lines[i].ori = 0
            else:
                # random 0 or 90
                lines[i].ori = randchoice([0, 90])
            lines[i].setAutoDraw(True)


        ioServer.sendMessageEvent('Display onset t%i' %(trials.thisN))
        eyetracker.sendMessage('Display onset t%i' %(trials.thisN))
      End Routine:
        for i in range(6):
            items[i].setAutoDraw(False)
            lines[i].setAutoDraw(False)
        win.flip()

        ioServer.sendMessageEvent('Display offset t%i' %(trials.thisN))
        eyetracker.sendMessage('Display offset t%i' %(trials.thisN))

        if search_response.corr == 1:
            corr_trials = corr_trials +1
    KeyboardComponent search_response
      allowedKeys = 'left','up'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine block_break
    CodeComponent break_code
      Code Type = Py
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      Begin Experiment:
        corr_trials = 0
        block_break = False
        key_dur = 1.0 + random()/2.0
      Begin Routine:
        if ((trials.thisN+1) % block_trials == 0):
            block_break = True
            key_dur = 1800.0 # maximum 30 minutes
            this_block=int((trials.thisN+1)/block_trials)
            corr_rate = round(corr_trials/block_trials*100)
            btext = 'Block Nr. ' + str(this_block) + ' ist fertig.\n\n'
            btext = btext + 'Es gibt noch ' + str(num_block-this_block) + '\n\n'
            btext = btext + 'Im vorigen Block war Ihre korrekte Rate: \n\n' + str(corr_rate) + '%\n\n'
            btext = btext + 'Bitte halten Sie Ihre korrekte Rate so hoch wie möglich. \n\n'
            btext = btext + 'Bitte denken Sie daran, sich während der Anzeige des Hinweises auf das Fixationskreuz zu fokussieren. \n\n'
            btext = btext + 'Wenn Sie bereit sind, drücken Sie die LEERTASTE, um fortzufahren...'
            block_info.text = btext
            corr_trials=0
        else:
            block_info.text = ''
      End Routine:
        block_break = False
        key_dur = 1.0 + random()/2.0
    TextComponent block_info
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $key_dur
      wrapWidth = 40
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      text:
        Machen Sie eine Pause.

        Bitte denken Sie daran, sich während der Anzeige des Hinweises auf das Fixierungskreuz zu konzentrieren.

        Drücken Sie die LEERTASTE, um fortzufahren...
    KeyboardComponent key_block
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $key_dur
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  Routine finish
    TextComponent end
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = deg
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      text:
        Das Experiment ist beendet.

        Vielen Dank für Ihre Teilnahme!
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instruction3
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent diamond1
      fillColor = -0.7255,0.8902,0.8353
      lineColor = -0.7255,0.8902,0.8353
      ori = 45
      pos = (-4, 0)
      saveStartStop = False
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    PolygonComponent diamond2
      fillColor = 1.000, 0.2491, -1.0000
      lineColor = 1.000, 0.2491, -1.0000
      ori = 45
      pos = (4, 0)
      saveStartStop = False
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextComponent Task
      letterHeight = 1
      pos = (0, 6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        Ihre Aufgabe ist es, die Ausrichtung der Linie innerhalb das Diamant-Objektes zu erkennen und darauf zu reagieren, indem Sie die "linke Pfeiltaste" für horizontal und die "obere Pfeiltaste" für vertikal drücken. Ignorieren Sie bitte alle farblichen Ablenkungen, die auf dem Bildschirm erscheinen können.

        Drücken Sie die LEERTASTE zum Starten.
    PolygonComponent line1
      fillColor = black
      lineColor = black
      pos = (-4.0, 0)
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.1)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent line2
      fillColor = black
      lineColor = black
      ori = 90
      pos = (4, 0)
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.1)
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent key_f
      letterHeight = 1
      pos = (-4, -4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = linke Pfeiltaste
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    TextComponent key_j
      letterHeight = 1
      pos = (4, -4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = obere Pfeiltaste
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  Routine Instruction2
    ImageComponent image_instr1
      image = display_Deutsch.png
      pos = (0, -1)
      saveStartStop = False
      size = (10, 7.7)
      startVal [time (s)] = 0.0
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    TextComponent text_intro
      letterHeight = 1
      pos = (0, 6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 40
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      text:
        Unmittelbar nach der Anzeige des Hinweises sehen Sie eine visuelle Suchanzeige mit sechs Elementen. Bei einigen Versuchen kann eines davon eine abweichende Farbe haben. Dies ist ein Ablenkungsfaktor, den Sie ignorieren sollten.

        Ihre Aufgabe ist es, das Diamant-Objekt zu finden und die Ausrichtung der Linie darin zu erkennen.
    KeyboardComponent space_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_cont2
      letterHeight = 1
      pos = (0, -6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Drücken Sie die LEERTASTE, um fortzufahren ...
      units = deg
      wrapWidth = 40
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  Routine Instruction1
    ImageComponent image_inst_
      image = cue_display.png
      pos = (-0.3, 0)
      saveStartStop = False
      size = [10, 7.13]
      startVal [time (s)] = 0.0
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    TextComponent text_1
      letterHeight = 1
      pos = (0, 6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Bei diesem Suchexperiment sehen Sie eine Hinweis- und eine Suchanzeige. Die Hinweisanzeige besteht aus einem Fixationskreuz und einer Linie, die in eine Richtung zeigt. Fokussieren Sie sich auf das Fixationskreuz und ignorieren Sie die Linie. Unten sehen Sie ein Beispiel für eine Hinweisanzeige.
      units = deg
      wrapWidth = 40
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    KeyboardComponent space0
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_cont
      letterHeight = 1
      pos = (0, -6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Drücken Sie die LEERTASTE, um fortzufahren ...
      units = deg
      wrapWidth = 40
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine et_record_start
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine et_record_stop
    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  EyetrackerCalibrationRoutine calibration
    borderColor = white
    borderWidth = 1
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = 0.6549, 0.6549, 0.6549
    innerBorderColor = white
    innerBorderWidth = 1
    innerFillColor = green
    innerRadius = 0.14
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.35
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine synchronize
    TextComponent text
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        um die Uhr mit dem Programm zu synchronisieren:

        Drücken Sie die LEERTASTE und die Uhr gleichzeitig.
    KeyboardComponent key_sync
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  EyetrackerCalibrationRoutine calibration
  Routine synchronize
  Routine Instruction1
  Routine Instruction2
  Routine instruction3
  Routine et_record_start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"data/seq_"+expInfo['participant']+".csv"
    loopType = sequential
    nReps = 1
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    Routine cue
    Routine search
    Routine block_break
  LoopTerminator trials
  Routine et_record_stop
  Routine finish
